Visualize:Property%20Sets matrix VisPropertySets= 0 1 // row titles are properties in the form "SRCD.Left", columns are property sets
System:Configuration matrix OperatorVersion= { Framework Revision Build } 1 3.0.5 4229,%202012/07/03%2018:02:30 2012/07/03%2020:12:06 // operator module version information
System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Source:Signal%20Properties:DataIOFilter list ChannelNames= 16 Cz Pz P3 P4 C3 C4 Cp5 Cp6 P1 P2 Poz C1 C2 Fc1 Fc2 Fcz // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 16 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.019 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ../data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Tomek Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
Visualize:Timing:DataIOFilter int VisualizeTiming= 1 1 0 1 // visualize system timing (0=no, 1=yes) (boolean)
Visualize:Source%20Signal:DataIOFilter int VisualizeSource= 1 1 0 1 // visualize raw brain signal (0=no, 1=yes) (boolean)
Visualize:Source%20Signal:DataIOFilter int VisualizeSourceDecimation= 1 auto % % // decimation factor for raw brain signal
Visualize:Source%20Signal:DataIOFilter int VisualizeSourceBufferSize= auto auto % % // number of blocks to aggregate before sending to operator
Visualize:Source%20Signal:DataIOFilter int VisualizeSourceTime= 2s 2s 0 % // how much time in Source visualization
Visualize:Source%20Signal:DataIOFilter int SourceMin= -100muV -100muV % % // raw signal vis Min Value
Visualize:Source%20Signal:DataIOFilter int SourceMax= 100muV 100muV % % // raw signal vis Max Value
Source:Signal%20Properties:SignalGeneratorADC int SourceCh= 16 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:SignalGeneratorADC int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:SignalGeneratorADC int SamplingRate= 256 256Hz 1 % // sample rate
Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 0 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 0 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 60muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string OffsetMultiplier= StimulusType StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 1 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 4 1 2 3 4 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
System:Core%20Connections string SignalSourceIP= 127.0.0.1 127.0.0.1 % % // the SignalSource module's listening IP
System:Core%20Connections string OperatorIP= 127.0.0.1 127.0.0.1 % % // the Operator module's IP
System:Core%20Connections string SignalSourcePort= 49666 4200 1024 65535 // the SignalSource module's listening port
System:Configuration matrix SignalSourceVersion= { Framework Revision Build } 1 3.0.5 4229,%202012/07/03%2018:02:30 2012/07/03%2020:12:06 // SignalSource version information
System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
Visualize:Processing%20Stages int VisualizeAlignmentFilter= 0 0 0 1 // Visualize AlignmentFilter output (boolean)
Visualize:Processing%20Stages int VisualizeTransmissionFilter= 0 0 0 1 // Visualize TransmissionFilter output (boolean)
Filtering:SpatialFilter int SpatialFilterType= 0 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 4 4 1 0 0 0 0 1 0 0 0 0 1 0 0 0 0 1 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:P3TemporalFilter int EpochLength= 800ms 500ms 0 % // Length of data epoch from stimulus onset
Filtering:P3TemporalFilter int EpochsToAverage= 1 1 0 % // Number of epochs to average
Visualize:P3TemporalFilter int VisualizeP3TemporalFiltering= 1 0 0 1 // Visualize averaged epochs (0=no 1=yes) (boolean)
Visualize:P3TemporalFilter int TargetERPChannel= 1 1 % % // Input channel for which to display ERP data
Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 1 6 2 1 // Linear classification matrix in sparse representation
System:Core%20Connections string SignalProcessingIP= 127.0.0.1 127.0.0.1 % % // the SignalProcessing module's listening IP
System:Core%20Connections string SignalProcessingPort= 49668 4200 1024 65535 // the SignalProcessing module's listening port
System:Configuration matrix SignalProcessingVersion= { Framework Revision Build } 1 3.0.5 4229,%202012/07/03%2018:02:30 2012/07/03%2020:12:06 // SignalProcessing version information
System:Configuration matrix SignalProcessingFilterChain= 3 { Filter%20Name Position%20String } SpatialFilter 2.A P3TemporalFilter 2.B LinearClassifier 2.C // SignalProcessing filter chain
Visualize:Processing%20Stages int VisualizeSpatialFilter= 0 0 0 1 // Visualize SpatialFilter output (boolean)
Visualize:Processing%20Stages int VisualizeLinearClassifier= 0 0 0 1 // Visualize LinearClassifier output (boolean)
Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 1400 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 900 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 1 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
Visualize:Application%20Window:ApplicationWindow int VisualizeApplicationWindow= 0 0 0 1 // Display miniature copy of Application window (boolean)
Visualize:Application%20Window:ApplicationWindow int AppWindowSpatialDecimation= 8 8 1 % // Application window decimation (shrinking) factor
Visualize:Application%20Window:ApplicationWindow int AppWindowTemporalDecimation= 4 16 1 % // Application window time decimation factor
Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:StimulusTask float PreRunDuration= 2s 1 0 % // pause preceding first sequence
Application:Sequencing:StimulusTask float PostRunDuration= 2s 0 0 % // pause following last sequence
Application:Sequencing:StimulusTask float PreSequenceDuration= 1/2s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing:StimulusTask float PostSequenceDuration= 3/4s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing:StimulusTask float StimulusDuration= 250ms 40ms 0 % // stimulus duration
Application:Sequencing:StimulusTask float ISIMinDuration= 350ms 80ms 0 % // minimum duration of inter-stimulus interval
Application:Sequencing:StimulusTask float ISIMaxDuration= 370ms 80ms 0 % // maximum duration of inter-stimulus interval
Application:Result%20Processing:StimulusTask int InterpretMode= 2 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 copy mode (enumeration)
Application:Result%20Processing:StimulusTask int DisplayResults= 1 1 0 1 // display results of copy/free spelling (boolean)
Application:Sequencing:P3SpellerTask int NumberOfSequences= 1 15 1 % // number of sequences in a set of intensifications
Application:Speller%20Targets:P3SpellerTask matrix TargetDefinitions= 6 { Display Enter Display%20Size Icon%20File Sound%20File } 1 1 1 % % 2 2 1 % % 3 3 1 % % 4 4 1 % % 5 5 1 % % 6 6 1 % % // speller target properties
Application:Speller%20Targets:P3SpellerTask intlist NumMatrixColumns= 1 6 6 1 % // display matrices' column number(s)
Application:Speller%20Targets:P3SpellerTask intlist NumMatrixRows= 1 1 6 0 % // display matrices' row number(s)
Application:Audio%20Stimuli:P3SpellerTask int AudioStimuliOn= 0 0 0 1 // Audio Stimuli Mode (0=no, 1=yes) (boolean)
Application:Audio%20Stimuli:P3SpellerTask matrix AudioStimuliRowsFiles= 6 { filename } sounds/1.wav sounds/2.wav sounds/3.wav sounds/4.wav sounds/5.wav sounds/6.wav // audio stimuli rows files 
Application:Audio%20Stimuli:P3SpellerTask matrix AudioStimuliColsFiles= 6 { filename } sounds/a.wav sounds/b.wav sounds/c.wav sounds/d.wav sounds/e.wav sounds/f.wav // audio stimuli column files 
Application:Speller%20Targets:P3SpellerTask floatlist TargetWidth= 1 16 0 0 100 // target width in percent of screen width
Application:Speller%20Targets:P3SpellerTask floatlist TargetHeight= 1 14 0 0 100 // target height in percent of screen height
Application:Speller%20Targets:P3SpellerTask floatlist TargetTextHeight= 1 30 0 0 100 // height of target labels in percent of screen height
Application:Speller%20Targets:P3SpellerTask stringlist BackgroundColor= 1 0x00000000 0x505050 % % // target background color (color)
Application:Speller%20Targets:P3SpellerTask stringlist TextColor= 1 0x00000000 0x505050 % % // text color (color)
Application:Speller%20Targets:P3SpellerTask stringlist TextColorIntensified= 1 0x00000000 0x505050 % % // intensified text color (color)
Application:Speller%20Targets:P3SpellerTask intlist IconHighlightMode= 1 1 1 0 4 // icon highlight method 0: Show/Hide, 1: Intensify, 2: Grayscale, 3: Invert, 4: Dim    (enumeration)
Application:Speller%20Targets:P3SpellerTask floatlist IconHighlightFactor= 1 0.5 0.5 0 % // scale factor for highlighted icon pixel values
Application:Speller:P3SpellerTask int FirstActiveMenu= 1 1 1 % // Index of first active menu
Application:Speller:P3SpellerTask float StatusBarSize= 10 0 0 100 // size of status bar in percent of screen height
Application:Speller:P3SpellerTask float StatusBarTextHeight= 4 0 0 100 // size of status bar text in percent of screen height
Application:Speller:P3SpellerTask string TextToSpell= 123456 // character or string to spell in offline copy mode
Application:Speller:P3SpellerTask string TextResult= % // user spelling result
Application:Speller:P3SpellerTask int TestMode= 1 0 0 1 // select targets by clicking on their associated stimuli (0=no, 1=yes) (boolean)
Application:Speller:P3SpellerTask string DestinationAddress= % // network address for speller output in IP:port format
Application:Text%20Window:P3SpellerTask int TextWindowEnabled= 0 0 0 1 // Show Text Window (0=no, 1=yes) (boolean)
Application:Text%20Window:P3SpellerTask int TextWindowLeft= 600 0 0 % // Text Window X location
Application:Text%20Window:P3SpellerTask int TextWindowTop= 5 0 0 % // Text Window Y location
Application:Text%20Window:P3SpellerTask int TextWindowWidth= 512 512 0 % // Text Window Width
Application:Text%20Window:P3SpellerTask int TextWindowHeight= 512 512 0 % // Text Window Height
Application:Text%20Window:P3SpellerTask string TextWindowFontName= Courier // Text Window Font Name
Application:Text%20Window:P3SpellerTask int TextWindowFontSize= 10 4 1 % // Text Window Font Size
Application:Text%20Window:P3SpellerTask string TextWindowFilePath= % // Path for Saved Text File (directory)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes, empty for off
Connector:ConnectorOutput string ConnectorOutputAddress= localhost:20322 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { TIME%20OUT%20!!! Waiting%20to%20start%20... } Zeit%20abgelaufen! Warte%20... // Localized user messages
System:Core%20Connections string ApplicationIP= 127.0.0.1 127.0.0.1 % % // the Application module's listening IP
System:Core%20Connections string ApplicationPort= 49670 4200 1024 65535 // the Application module's listening port
System:Configuration matrix ApplicationVersion= { Framework Revision Build } 1 3.0.5 4229,%202012/07/03%2018:02:30 2012/07/03%2020:12:06 // Application version information
System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 P3SpellerTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
System:Randomization int RandomSeed= 16185 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
System:State%20Vector int StateVectorLength= 15 16 % % // length of the state vector in bytes
